PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [950, 650]
  expName = Muller_Lyer_1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instruction
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will see two lines on the screen. Your task is to judge the relative length of the lines and respond as follows:

        Press the 'Z' key if you think the upper/ left line is longer.
        Press the 'M' key if you think the lower/right line is longer.
        Press the 'spacebar' if you think both lines are of equal length.

        Please respond as quickly and accurately as possible. Take your time to understand the instructions and key 'spacebar' to begin with the experiment :)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial1_Same_colors
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $Image_file
      size [set every repeat] = (0.7, 0.6)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'z','m','space'
      correctAns = $Correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Trial2_Diff_colors
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    PolygonComponent polygon2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $Image_file
      size [set every repeat] = (0.7, 0.6)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp2
      allowedKeys = 'z','m','space'
      correctAns = $Correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you :))
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images_file_same_1.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\1.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\2.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\3.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\4.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\5.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\6.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\7.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\8.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\9.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- Same colours\\10.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\1.png'), ('Correct_ans', 'space')])]
    Routine Trial1_Same_colors
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Images_file_diff_1.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\10.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\1.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\2.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\3.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\4.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\5.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\6.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\7.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\8.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\Solo Project- DIFF colours\\9.png'), ('Correct_ans', 'space')]),
      OrderedDict([('Image_file', 'Solo project - Images\\1.png'), ('Correct_ans', 'space')])]
    Routine Trial2_Diff_colors
  LoopTerminator trials_2
  Routine Thank_you
